<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:UclOpenFreeingVisionBenchmark;assembly=Extensions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:aruco="clr-namespace:Bonsai.Aruco;assembly=Bonsai.Aruco"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="RigPath" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ReadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="RigPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:ReadAllText">
                <io:Path>..\local\UclOpenFreeingVisionBenchmarkRig.json</io:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:UclOpenFreeingVisionBenchmarkRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Width" Selector="Screen.WindowWidth" />
                <Property Name="Height" Selector="Screen.WindowHeight" />
                <Property Name="TargetRenderFrequency" Selector="Screen.TargetRenderFrequency" />
                <Property Name="TargetUpdateFrequency" Selector="Screen.TargetUpdateFrequency" />
                <Property Name="DisplayDevice" Selector="Screen.DisplayIndex" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>1920</gl:Width>
                <gl:Height>1080</gl:Height>
                <gl:VSync>Off</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>White</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Fullscreen</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>360</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency>360</gl:TargetUpdateFrequency>
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>aruco-1</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>..\markers\aruco-1-100.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>aruco-2</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>..\markers\aruco-2-100.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>aruco-100</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>..\markers\aruco-100-100.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>aruco-199</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>..\markers\aruco-199-100.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>RenderFrame</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.CubemapView.bonsai">
              <Eye>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Eye>
              <NearClip>0.1</NearClip>
              <FarClip>200</FarClip>
              <Light>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Light>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>DrawCall</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderCubemap">
                <gl:RenderState />
                <gl:ClearColor>White</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:FaceSize xsi:nil="true" />
                <gl:InternalFormat>Rgb</gl:InternalFormat>
                <gl:MinFilter>Linear</gl:MinFilter>
                <gl:MagFilter>Linear</gl:MagFilter>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ArucoCalibrationScreen.ViewWidth</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Width" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ArucoCalibrationScreen.ViewHeight</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Height" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>ViewOffset</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="Rotation" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Item2</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="Translation" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>0.596841</Width>
              <Height>0.335723042</Height>
              <Rotation>
                <X>NaN</X>
                <Y>NaN</Y>
                <Z>NaN</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0</X>
              <Y>0</Y>
              <Width>1</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>PostDrawing</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawCall</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
              <TranslationX>0</TranslationX>
              <TranslationY>0</TranslationY>
              <TranslationZ>2</TranslationZ>
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
              <ScaleX>0.35</ScaleX>
              <ScaleY>0.35</ScaleY>
              <ScaleZ>1</ScaleZ>
              <Ambient>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Ambient>
              <Diffuse>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Diffuse>
              <Specular>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Specular>
              <SpecularExponent>10</SpecularExponent>
              <MeshName>Plane</MeshName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PostDrawing</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ArucoCalibrationScreen.ExtentY</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExtentX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ArucoCalibrationScreen.ExtentY</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExtentY" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ArucoCalibrationScreen.OffsetX</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ArucoCalibrationScreen.OffsetY</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationY" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
              <TextureName>aruco-2</TextureName>
              <ExtentX>0.297864556</ExtentX>
              <ExtentY>0.297864556</ExtentY>
              <LocationX>0.9531666</LocationX>
              <LocationY>-0.4765833</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ScaleX>1</ScaleX>
              <ScaleY>1</ScaleY>
              <ShiftX>0</ShiftX>
              <ShiftY>0</ShiftY>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PostDrawing</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>0.02</ExtentX>
              <ExtentY>0.02</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="23" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="23" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="23" Label="Source3" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="18" To="21" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="23" Label="Source4" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source5" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="41" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="30" To="33" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="41" Label="Source2" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="41" Label="Source3" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="41" Label="Source4" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="41" Label="Source5" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>BehaviorBoard.PortName</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="PortName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:BehaviorBoard.BehaviorBoard.bonsai">
        <CommandsSubjectName>BehaviorCommands</CommandsSubjectName>
        <PortName>COM4</PortName>
        <DumpRegisters>true</DumpRegisters>
        <Heartbeat>Disabled</Heartbeat>
        <EventsSubjectName>BehaviorEvents</EventsSubjectName>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CameraTriggerController</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
              <rx:Name>StartCameras</rx:Name>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateStartCamerasPayload">
                <beh:StartCameras>CameraOutput0</beh:StartCameras>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateStartCamerasPayload">
                <beh:StartCameras>CameraOutput1</beh:StartCameras>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
              <rx:Name>StopCameras</rx:Name>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateStopCamerasPayload">
                <beh:StopCameras>CameraOutput0</beh:StopCameras>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateStopCamerasPayload">
                <beh:StopCameras>CameraOutput1</beh:StopCameras>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Trigger0Frequency" Description="The frequency, in Hz, at which to trigger cameras on Trigger0" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>50</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Trigger0Frequency</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Camera0Frequency" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateCamera0FrequencyPayload">
                <beh:Camera0Frequency>50</beh:Camera0Frequency>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Trigger1Frequency" Description="The frequency, in Hz, at which to trigger cameras on Trigger1" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>50</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Trigger1Frequency</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Camera1Frequency" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateCamera1FrequencyPayload">
                <beh:Camera1Frequency>50</beh:Camera1Frequency>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="BehaviorCommandsSubjectName" Description="The name of the commands subject for the behavior board that triggers camera frames" Category="Subjects" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="BehaviorEventsSubjectName" Description="The name of the subject carrying events from the behavior board that triggers camera frames" Category="Subjects" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="Camera0TriggerEventsSubjectName" Description="The name of the subject to which timestamped camera trigger events Trigger0 are published" Category="Subjects" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Camera0TriggerEvents</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="Camera1TriggerEventsSubjectName" Description="The name of the subject to which timestamped camera trigger events Trigger1 are published" Category="Subjects" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Camera1TriggerEvents</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="19" Label="Source1" />
            <Edge From="2" To="19" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="19" Label="Source3" />
            <Edge From="5" To="19" Label="Source4" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="18" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source5" />
            <Edge From="19" To="21" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="25" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="22" To="27" Label="Source1" />
            <Edge From="22" To="31" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="30" Label="Source1" />
            <Edge From="29" To="30" Label="Source2" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="34" Label="Source1" />
            <Edge From="33" To="34" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="MulticastSubject">
        <Name>StartCameras</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>SubjectCamera.SerialNumber</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="SerialNumber" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:TriggeredSpinnaker.bonsai">
        <ExposureTime>19000</ExposureTime>
        <Gain>0</Gain>
        <Binning>1</Binning>
        <SerialNumber>25224819</SerialNumber>
        <ColorProcessing>Default</ColorProcessing>
        <CameraTriggerEventsSubjectName>Camera0TriggerEvents</CameraTriggerEventsSubjectName>
        <FrameEventsSubjectName>SubjectFrameEvents</FrameEventsSubjectName>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TrackCamera.SerialNumber</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="SerialNumber" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:TriggeredSpinnaker.bonsai">
        <ExposureTime>19000</ExposureTime>
        <Gain>0</Gain>
        <Binning>1</Binning>
        <SerialNumber>25170682</SerialNumber>
        <ColorProcessing>Default</ColorProcessing>
        <CameraTriggerEventsSubjectName>Camera1TriggerEvents</CameraTriggerEventsSubjectName>
        <FrameEventsSubjectName>TrackFrameEvents</FrameEventsSubjectName>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SubjectFrameEvents</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrackFrameEvents</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:CameraCapture">
            <cv:Index>1</cv:Index>
            <cv:CaptureProperties />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="aruco:DetectMarkers">
            <aruco:CameraParameters>intrinsics\2026-10-12\2026-10-12T15-14-22_intrinsics.yml</aruco:CameraParameters>
            <aruco:ThresholdMethod>AdaptiveThreshold</aruco:ThresholdMethod>
            <aruco:Param1>6</aruco:Param1>
            <aruco:Param2>5</aruco:Param2>
            <aruco:MinSize>0.005</aruco:MinSize>
            <aruco:MaxSize>0.5</aruco:MaxSize>
            <aruco:CornerRefinement>Lines</aruco:CornerRefinement>
            <aruco:MarkerSize>0.05</aruco:MarkerSize>
            <aruco:SetYPerpendicular>false</aruco:SetYPerpendicular>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="aruco:SelectMarker">
            <aruco:Id>1</aruco:Id>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="aruco:MarkerViewMatrix" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:PublishSubject">
          <Name>Marker1</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="aruco:SelectMarker">
            <aruco:Id>2</aruco:Id>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="aruco:MarkerViewMatrix" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:PublishSubject">
          <Name>Marker2</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Zip" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:PublishSubject">
          <Name>Markers</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Markers</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Item1</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Item2</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="gl:Invert" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Zip" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Multiply" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>RigSchema</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Aruco1.Offset</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>X</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Y</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Multiply">
          <Operand xsi:type="DoubleProperty">
            <Value>-1</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Zip" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="InputMapping">
          <PropertyMappings>
            <Property Name="Y" Selector="Item1" />
            <Property Name="X" Selector="Item2" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="gl:CreateVector3">
            <gl:X>-0.08</gl:X>
            <gl:Y>0.1</gl:Y>
            <gl:Z>0</gl:Z>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="Position" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="gl:TransformRelative">
            <gl:Order>Append</gl:Order>
            <gl:Position>
              <gl:X>-0.08</gl:X>
              <gl:Y>0.1</gl:Y>
              <gl:Z>0</gl:Z>
            </gl:Position>
            <gl:Rotation>
              <gl:Xyz>
                <gl:X>0</gl:X>
                <gl:Y>0</gl:Y>
                <gl:Z>0</gl:Z>
              </gl:Xyz>
              <gl:W>1</gl:W>
            </gl:Rotation>
            <gl:Scale>
              <gl:X>1</gl:X>
              <gl:Y>1</gl:Y>
              <gl:Z>1</gl:Z>
            </gl:Scale>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="gl:RotateY">
            <gl:Order>Prepend</gl:Order>
            <gl:Angle>-1.57079637</gl:Angle>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="gl:RotateZ">
            <gl:Order>Prepend</gl:Order>
            <gl:Angle>-1.57079637</gl:Angle>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="gl:Invert" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="gl:RotateZ">
            <gl:Order>Prepend</gl:Order>
            <gl:Angle>1.57079637</gl:Angle>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="gl:ExtrinsicsTransform" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:BehaviorSubject">
          <Name>ViewOffset</Name>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="23" To="27" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="30" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source2" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="32" To="34" Label="Source1" />
      <Edge From="33" To="36" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source2" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="47" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="39" To="41" Label="Source1" />
      <Edge From="40" To="43" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source2" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source2" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>