<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:UclOpenFreeingVisionBenchmark;assembly=Extensions"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="SessionPath" />
        <Property Name="RigPath" />
        <Property Name="TaskPath" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ReadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="SessionPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:ReadAllText">
                <io:Path>..\local\ExperimentSession.json</io:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="RigPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:ReadAllText">
                <io:Path>..\local\UclOpenFreeingVisionBenchmarkRig.json</io:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="TaskPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:ReadAllText">
                <io:Path>..\local\UclOpenFreeingVisionBenchmarkTaskLogic.json</io:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RawTaskSchema</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="9" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="9" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:ExperimentSession" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:UclOpenFreeingVisionBenchmarkRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskSchema</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:UclOpenFreeingVisionBenchmarkTaskLogic" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>BehaviorBoard.PortName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:BehaviorBoard.BehaviorBoard.bonsai">
              <CommandsSubjectName>BehaviorCommands</CommandsSubjectName>
              <PortName>COM13</PortName>
              <DumpRegisters>true</DumpRegisters>
              <Heartbeat>Disabled</Heartbeat>
              <EventsSubjectName>BehaviorEvents</EventsSubjectName>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>BehaviorBoard.CameraTriggerController.Trigger0Frequency</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Trigger0Frequency" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>BehaviorBoard.CameraTriggerController.Trigger1Frequency</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Trigger1Frequency" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:BehaviorBoard.CameraTriggerController.bonsai">
              <Trigger0Frequency>150</Trigger0Frequency>
              <Trigger1Frequency>150</Trigger1Frequency>
              <BehaviorCommandsSubjectName>BehaviorCommands</BehaviorCommandsSubjectName>
              <BehaviorEventsSubjectName>BehaviorEvents</BehaviorEventsSubjectName>
              <Camera0TriggerEventsSubjectName>Camera0TriggerEvents</Camera0TriggerEventsSubjectName>
              <Camera1TriggerEventsSubjectName>Camera1TriggerEvents</Camera1TriggerEventsSubjectName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TrackCamera.SerialNumber</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SerialNumber" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TrackCamera.ExposureTime</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExposureTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:TriggeredSpinnaker.bonsai">
              <ExposureTime>19000</ExposureTime>
              <Gain>0</Gain>
              <Binning>1</Binning>
              <SerialNumber>25224819</SerialNumber>
              <ColorProcessing>Default</ColorProcessing>
              <CameraTriggerEventsSubjectName>Camera0TriggerEvents</CameraTriggerEventsSubjectName>
              <FrameEventsSubjectName>FrameEventsTrackCam</FrameEventsSubjectName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SubjectCamera.SerialNumber</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SerialNumber" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SubjectCamera.ExposureTime</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExposureTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:TriggeredSpinnaker.bonsai">
              <ExposureTime>19000</ExposureTime>
              <Gain>0</Gain>
              <Binning>1</Binning>
              <SerialNumber>25224819</SerialNumber>
              <ColorProcessing>Default</ColorProcessing>
              <CameraTriggerEventsSubjectName>Camera0TriggerEvents</CameraTriggerEventsSubjectName>
              <FrameEventsSubjectName>FrameEventsSubjectCam</FrameEventsSubjectName>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton A Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="MulticastSubject">
              <Name>StartCameras</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="MulticastSubject">
              <Name>StopCameras</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="9" To="12" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="14" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="15" To="18" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="20" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>